CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:22
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['Only use greyscale images (preferably 12 bit), so there is no need for converting them later onwards. Filter for tif (12 bit) images only. ']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
    Filter images?:Custom
    Select the rule criteria:or (extension does istif)

Metadata:[module_num:2|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notes:['Metadata is being extracted from the file names and plate layout csv file. Site displays the number of sites imaged per well. ']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:.*_(?P<Well>[A-H][0-9]{1,2})_000(?P<Site>[0-8]{1})
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    Extract metadata from:All images
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    Metadata extraction method:Import from file
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    Extract metadata from:All images
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    Metadata file location:Elsewhere...|E:\\ACQUISITION FOLDER\\CP019_17-06-2024 WF\\tif
    Match file and image metadata:[{'CSV Metadata': 'Well', 'Image Metadata': 'Well'}]
    Use case insensitive matching?:No
    Metadata file name:Layout CP019.csv
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
NamesAndTypes:[module_num:3|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notes:['In this module the names are assigned to the antibody used to capture a certain organelle. All of these images are in grayscale and intensity range is taken from the image metadata. ']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:5
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:or (file does contain "488")
    Name to assign these images:ER
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (file does contain "AGP")
    Name to assign these images:AGP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (file does contain "Hoechst")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (file does contain "Mito")
    Name to assign these images:Mito
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (file does contain "Syto")
    Name to assign these images:RNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:['No groups are created in this pipeline. ']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
    Do you want to group your images?:No
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
CorrectIlluminationCalculate:[module_num:5|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notes:['']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
    Select the input image:AGP
    Name the output image:IllumAGP
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:6|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
    Select the input image:DNA
    Name the output image:IllumDNA
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:7|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
    Select the input image:ER
    Name the output image:IllumER
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:8|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
    Select the input image:Mito
    Name the output image:IllumMito
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:9|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
    Select the input image:RNA
    Name the output image:IllumRNA
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:10|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
    Select the input image:AGP
    Name the output image:CorrAGP
    Select the illumination function:IllumAGP
    Select how the illumination function is applied:Divide
    Select the input image:DNA
    Name the output image:CorrDNA
    Select the illumination function:IllumDNA
    Select how the illumination function is applied:Divide
    Select the input image:ER
    Name the output image:CorrER
    Select the illumination function:IllumER
    Select how the illumination function is applied:Divide
    Select the input image:Mito
    Name the output image:CorrMito
    Select the illumination function:IllumMito
    Select how the illumination function is applied:Divide
    Select the input image:RNA
    Name the output image:CorrRNA
    Select the illumination function:IllumRNA
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

IdentifyPrimaryObjects:[module_num:11|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notes:['Check if the diameter of the nuclei is in between the range of 30/35 to 100 pixel units (if not, adjust accordingly). ']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
    Select the input image:CorrDNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):30,120
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3448
    Threshold correction factor:0.9
    Lower and upper bounds on threshold:0.0,0.3
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    Log transform before thresholding?:No
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
IdentifySecondaryObjects:[module_num:12|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notes:['Check smoothing scale, is it sufficient for all the conditions. ']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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:CorrAGP
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:Yes
    Name the new primary objects:FilteredNuclei
    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.9
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
IdentifyTertiaryObjects:[module_num:13|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:FilteredNuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

MeasureObjectIntensity:[module_num:14|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notes:['']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
    Select images to measure:CorrAGP, CorrDNA, CorrER, CorrMito, CorrRNA
    Select objects to measure:Cells, Cytoplasm, FilteredNuclei

MeasureObjectIntensityDistribution:[module_num:15|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
    Select images to measure:CorrAGP, CorrDNA, CorrER, CorrMito, CorrRNA
    Hidden:3
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select objects to measure:Cytoplasm
    Object to use as center?:Edges of other objects
    Select objects to use as centers:FilteredNuclei
    Select objects to measure:FilteredNuclei
    Object to use as center?:These objects
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    Select objects to measure:Cells
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
MeasureColocalization:[module_num:16|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
    Select images to measure:CorrAGP, CorrDNA, CorrER, CorrMito, CorrRNA
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Within objects
    Select objects to measure:Cells, Cytoplasm, FilteredNuclei
    Run all metrics?:Yes
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    Method for Costes thresholding:Faster

MeasureGranularity:[module_num:17|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
    Select images to measure:CorrAGP, CorrDNA, CorrER, CorrMito, CorrRNA
    Measure within objects?:Yes
    Select objects to measure:Cells, Cytoplasm, FilteredNuclei
    Subsampling factor for granularity measurements:0.20
    Subsampling factor for background reduction:0.5
    Radius of structuring element:8
    Range of the granular spectrum:16

MeasureObjectSizeShape:[module_num:18|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
    Select object sets to measure:Cells, Cytoplasm, FilteredNuclei
    Calculate the Zernike features?:No
    Calculate the advanced features?:Yes

MeasureTexture:[module_num:19|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
    Select images to measure:CorrAGP, CorrDNA, CorrER, CorrMito, CorrRNA
    Select objects to measure:Cells, Cytoplasm, FilteredNuclei
    Enter how many gray levels to measure the texture at:256
    Hidden:2
    Measure whole images or objects?:Objects
    Texture scale to measure:5
    Texture scale to measure:20

ClassifyObjects:[module_num:20|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notes:['Load in the CellProfiler Analyst classifier model (.model file)']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enabled:False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
    Make classification decision based on:Classifier Model
    Hidden:1
    Hidden:1
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    Select bin spacing:Evenly spaced bins
    Number of bins:3
    Lower threshold:0.0
    Use a bin for objects below the threshold?:No
    Upper threshold:1.0
    Use a bin for objects above the threshold?:No
    Enter the custom thresholds separating the values between bins:0,1
    Give each bin a name?:No
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    Retain an image of the classified objects?:No
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    Name the output objects:ClassifiedObjects
    Select the object name:Cells
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
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    Method to select the cutoff:Mean
    Enter the cutoff value:0.5
    Use custom names for the bins?:No
    Enter the low-low bin name:low_low
    Enter the low-high bin name:low_high
    Enter the high-low bin name:high_low
    Enter the high-high bin name:high_high
    Retain an image of the classified objects?:No
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    Save classes as new object sets?:No
    Select the location of the classifier model file:Elsewhere...|
    Rules or classifier file name:mymodel.model
    Allow fuzzy feature matching?:Yes

ExportToDatabase:[module_num:21|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notes:['Do not change the SQlite database file (CellPaintingProject). Change experiment name to CP0XX + date you are analyzing and change table prefix. Check the output settings/folder. ']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
    Database type:SQLite
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    Add a prefix to table names?:Yes
    Table prefix:CP019cell_
    Output file location:Default Output Folder|
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:CellPaintingProjectSegmentation
    Calculate the per-image mean values of object measurements?:No
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:Select...
    Select the objects:Cells
    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:No
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    Select the plate type:96
    Select the plate metadata:Plate
    Select the well metadata:Well
    Include information for all images, using default values?:Yes
    Properties image group count:1
    Properties group field count:3
    Properties filter field count:0
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    Experiment name:CP019cell_17-11-2024
    Which objects should be used for locations?:Cells
    Enter a phenotype class table name if using the Classifier tool in CellProfiler Analyst:EMT
    Export object relationships?:No
    Overwrite without warning?:Never
    Access CellProfiler Analyst images via URL?:No
    Select the classification type:Object
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    Do you want to add group fields?:Yes
    Enter the name of the group:Condition
    Enter the per-image columns which define the group, separated by commas:ImageNumber, Image_Metadata_Condition
    Enter the name of the group:Well
    Enter the per-image columns which define the group, separated by commas:ImageNumber, Image_Metadata_Plate, Image_Metadata_Well
    Enter the name of the group:Plate
    Enter the per-image columns which define the group, separated by commas:ImageNumber, Image_Metadata_Plate
    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:No
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
ExportToSpreadsheet:[module_num:22|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notes:['When exporting all the measurements to a Spreadsheet, the data can be used in for example Morpheus online software. ']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:CP019cell_
    Overwrite existing files without warning?:No
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